// CA1 heteroassociative memory network: Storage and recall
// CA1 PCs, BCs, AACs, BSCs and OLMs (using moderate cell models)
// EC, CA3 (excitatory) and Septal (inhibitory) inputs
// Cycle is: Recall-Storage-Recall etc
// Serial code adapted from Hines' ran3ser.hoc
// VCU & BPG 8-1-09

// Results reported in V. Cutsuridis, S. Cobb and B.P. Graham,
// "Encoding and retrieval in a model of the hippocampal CA1 microcircuit",
// Hippocampus, in press, DOI 10.1002/hipo.20661, 2009.


{load_file("nrngui.hoc")}  // load the GUI and standard run libraries

if (name_declared("simname") == 0) {
	execute("strdef simname")
	simname="results"
	strdef fstem
	sprint(fstem,"Results/%s", simname)
	print "simname = ", simname, ", fstem = ", fstem
}



if (name_declared("batchflag") == 0) {
	batchflag = 0
}

if (name_declared("plotflag") == 0) {
	plotflag = 1
}


if (name_declared("scaleDown") == 0) {
	scaleDown = 1
}


if (name_declared("scaleEScon") == 0) {
	scaleEScon = 1
}



//////////////////////////////////////////////////////////////
// Steps 2 and 3 are to create the cells and connect the cells
//////////////////////////////////////////////////////////////





connect_random_low_start_ = 1  // low seed for mcell_ran4_init()

objref cells, nclist, ncslist, ncelist  // cells will be a List that holds 
  // all instances of network cells that exist on this host
  // nclist will hold all NetCon instances that exist on this host
  // and connect network spike sources to targets on this host (nclist)
  // ncslist holds NetConns from input spike sources (NetStims)
objref ranlist  // for RandomStreams on this host

objref stims, stimlist, cuelist, EClist	// phasic and tonic cell stimulation

objref gidvec  // to associate gid and position in cells List
  // useful for setting up connections and reporting connectivity


// Make the network
proc mknet() {

  print "Make cells..."
  mkcells()  // create the cells
  
  print "Make inputs..."
  mkinputs()  // create the CA3, EC and septal inputs
    
  print "Connect cells..."
  
connect_random_low_start_ = 1  // low seed for mcell_ran4_init()
mcell_ran4_init(connect_random_low_start_)
nclist = new List()

/*  
  //print "   EC..."
  // EC to BC
  connectcells(nbcell, iBC, nEC, iEC, EC_BC, EI_EC, EI_EC+1, EIDEL, EIWGT)
  // EC to AAC
  connectcells(naacell, iAAC, nEC, iEC, EC_AAC, EI_EC, EI_EC+1, EIDEL, EIWGT)

  //print "   CA3..."
  // CA3 to BC
  connectcells(nbcell, iBC, nCA3, iCA3, CA3_BC, EI_CA3, EI_CA3+3, EIDEL, EIWGT)
  // CA3 to AAC
  connectcells(naacell, iAAC, nCA3, iCA3, CA3_AAC, EI_CA3, EI_CA3+3, EIDEL, EIWGT)
  // CA3 to BSC
  connectcells(nbscell, iBSC, nCA3, iCA3, CA3_BSC, EI_CA3, EI_CA3+3, EIDEL, EIWGT)

  //print "   septum..."
  // SEP to BC
  connectcells(nbcell, iBC, nSEP, iSEP, SEP_BC, II_SEP, II_SEP+1, SEPDEL, SEPWGT)
  // SEP to AAC
  connectcells(naacell, iAAC, nSEP, iSEP, SEP_AAC, II_SEP, II_SEP+1, SEPDEL, SEPWGT)
  // SEP to BSC
  connectcells(nbcell, iBC, nSEP, iSEP, SEP_BSC, II_SEP, II_SEP+1, SEPDEL, SEPWGTL)
  // SEP to OLM
  connectcells(naacell, iAAC, nSEP, iSEP, SEP_OLM, IO_IN, IO_IN, SEPDEL, SEPWGTL)

  //print "   PC..."
  // PC to PC
  connectcells(npcell, iPC, npcell, iPC, PC_PC, E_PC, E_PC, Pcell2Pcell_delay, Pcell2Pcell_weight)
  // PC to BC
  connectcells(nbcell, iBC, npcell, iPC, PC_BC, EI_PC, EI_PC+1, Pcell2Bcell_delay, Pcell2Bcell_weight)
  // PC to AAC
  connectcells(naacell, iAAC, npcell, iPC, PC_AAC, EI_PC, EI_PC+1, Pcell2AAcell_delay, Pcell2AAcell_weight)
  // PC to BSC
  connectcells(nbscell, iBSC, npcell, iPC, PC_BSC, EI_PC, EI_PC+1, Pcell2BScell_delay, Pcell2BScell_weight)
  // PC to OLM
  connectcells(nolm, iOLM, npcell, iPC, PC_OLM, EO_PC, EO_PC+1, Pcell2OLMcell_delay, Pcell2OLMcell_weight)

  //print "   INs..."
  // BC to PC
  connectcells(npcell, iPC, nbcell, iBC, BC_PC, I_BC, I_BC, Bcell2Pcell_delay, Bcell2Pcell_weight)
  // BC to BC
  connectcells(nbcell, iBC, nbcell, iBC, BC_BC, II_SAME, II_SAME, Bcell2Bcell_delay, Bcell2Bcell_weight)
  // BC to BSC
  connectcells(nbscell, iBSC, nbcell, iBC, BC_BSC, II_OPP, II_OPP, Bcell2BScell_delay, Bcell2BScell_weight)
  // BC to OLM
  //connectcells(nolm, iOLM, nbcell, iBC, BC_OLM, IO_IN, IO_IN, Bcell2OLMcell_delay, Bcell2OLMcell_weight)
  // AAC to PC
  connectcells(npcell, iPC, naacell, iAAC, AAC_PC, I_AAC, I_AAC, AAcell2Pcell_delay, AAcell2Pcell_weight)
  // BSC to PC
  connectcells(npcell, iPC, nbscell, iBSC, BSC_PC, I_BSC, I_BSC+5, BScell2Pcell_delay, BScell2Pcell_weight)
  connectcells(npcell, iPC, nbscell, iBSC, BSC_PC, I_BSC+6, I_BSC+11, BScell2Pcell_delay, BScell2Pcell_GABAB_weight)
  // BSC to BSC
  //connectcells(nbscell, iBSC, nbscell, iBSC, BSC_BSC, II_SAME, II_SAME, BScell2BScell_delay, BScell2BScell_weight)
  // BSC to BC
  connectcells(nbcell, iBC, nbscell, iBSC, BSC_PC, II_OPP, II_OPP, BScell2Bcell_delay, BScell2Bcell_weight)
  // OLM to PC
  connectcells(npcell, iPC, nolm, iOLM, OLM_PC, I_OLM, I_OLM+1, OLMcell2Pcell_delay, OLMcell2Pcell_weight)
  connectcells(npcell, iPC, nolm, iOLM, OLM_PC, I_OLM+2, I_OLM+3, OLMcell2Pcell_delay, OLMcell2Pcell_GABAB_weight)
  // OLM to BC
  //connectcells(nbcell, iBC, nolm, iOLM, OLM_BC, II_OPP, II_OPP, OLMcell2Bcell_delay, OLMcell2Bcell_weight)
*/
  //print "Connect inputs..."
  // EC input to PCs
  connectEC(FPATT, ECPATT, NPATT, E_EC, 2)	// restore existing pattern
  //connectEC(FSTORE, ECPATT, NSTORE, E_EC, 2)	// store new pattern
  // CA3 input to PCs
  //connectCA3($s1, $2, E_CA3, EN_CA3)	// with fixed synapses
  connectCA3($s1, $2, EM_CA3, EN_CA3)	// with modifiable synapses
  
}






// Target cells receive "convergence" number of inputs from
// the pool of source cells (only one input per source cell at most)
// ("convergence" not reached if no. of sources < convergence)
// connectcells(number of targets, first target cell, 
//		number of source cells, first source cell, 
//		convergence, first synapse,
//		last synapse, connection delay, weight)
// appends the NetCons to a List called nclist
proc connectcells() {local i, j, gid, nsyn, r  localobj syn, nc, rs, u
  // initialize the pseudorandom number generator
  u = new Vector($3)  // for sampling without replacement
  for i=0, cells.count-1 {	// loop over possible target cells
    gid = gidvec.x[i]	// id of cell
    if (gid >= $2 && gid < $1+$2) {	// appropriate target cell
      rs = ranlist.object(i)  // RandomStream for cells.object(i)
      rs.start()
      rs.r.discunif($4, $4+$3-1)  // return source cell index
      u.fill(0)  // u.x[i]==1 means spike source i has already been chosen
      nsyn = 0
      while (nsyn < $5 && nsyn < $3) {
        r = rs.repick()
        // no self-connection and only one connection from any source
        if (r != gidvec.x[i]) if (u.x[r-$4] == 0) {
          // target synapses
          for j = $6, $7 {
            // set up connection from source to target
            syn = cells.object(i).pre_list.object(j)
            //nc = pc.gid_connect(r, syn)
            nc = cells.object(r).connect2target(syn)
            nclist.append(nc)
            nc.delay = $8
            nc.weight = $9
          }
          u.x[r-$4] = 1
          nsyn += 1
        }
      }
    }
  }
}


// connects the EC input layer to PC cells
// read active PCs from pattern file
// all-to-all connectivity between EC and PC pattern cells
// appends the PC NetCons to a List called ncslist
proc connectEC() {local i, gid, ncue  localobj cue, cstim, syn, src, nc, fp, target
  ncelist = new List()
  // open patterns file
  fp = new File($s1)
  fp.ropen()
  cue = new Vector(npcell)
  cue.scanf(fp, $2, $3)	// read pattern
  fp.close()
  ncue = 0
  // find active cells in pattern
  for i=0, cue.size()-1 {
    //if (!pc.gid_exists(i+iPC)) { continue }
    if (cue.x[i] == 1) {
      // print "Pattern cell ", i
      //target = pc.gid2cell(i+iPC)
      target = cells.object(i+iPC)
      // target synapses
      for k = $4, $4+$5-1 {
        syn = target.pre_list.object(k)	// excitatory synapse
        // create pattern stimulus
        for j=0, nEC-1 {
          src = cells.object(j+iEC).stim
          // set up connection from source to target
          //nc = pc.gid_connect(j+iEC, syn)
          nc = new NetCon(src, syn)
          ncelist.append(nc)
          nc.delay = ECDEL
          nc.weight = ECWGT
        }
      }
    }
  }
}


// connects the CA3 input layer to output cells (PCs and INs)
// read PC connections from a file, with connections to
// a target being a column with index i for target cell i
// appends the PC NetCons to a List called ncslist
proc connectCA3() {local i, j, cp, gid  localobj src, syn, synN, nc, fc, rs, conns, rc
  cp = $2	// connection probability
  mcell_ran4_init(connect_random_low_start_)
  conns = new Vector(nCA3)  // connection weights
  rc = new Vector(nCA3)  // random physical connectivity
  ncslist = new List()
  //ncilist = new List()
  // inputs to PCs determined by weight matrix
  for i=0, cells.count-1 {	// loop over possible target cells
    gid = gidvec.x[i]	// id of cell
    if (gid >= iPC && gid < npcell+iPC) {	// appropriate target cell
    syn = cells.object(i).pre_list.object($3)	// AMPA synapse with STDP
    syn.wmax = CHWGT
    syn.wmin = CLWGT
    syn.d = STDPDFAC	// depression
    syn.p = STDPPFAC	// potentiation
    syn.gscale = AMPASUPP	// fraction of AMPA during storage
    syn.thresh = STDPTHRESH	// threshold for postsynaptic voltage detection
    syn.gbdel = STDPSTART
    syn.gbint = STDPINT
    syn.gblen = STDPLEN
    synN = cells.object(i).pre_list.object($4)	// NMDA synapse
    rs = ranlist.object(i)  // the corresponding RandomStream
    rs.start()
    rs.r.uniform(0, 1)  // return integer in range 0..1
    rc.setrand(rs.r)	// generate random connectivity
    // open connections file
    fc = new File($s1)
    fc.ropen()
    conns.scanf(fc, gid+1, nCA3)	// read incoming weights for cell gid
    fc.close()

    for j=0, nCA3-1 {
    //for j=0, CA3_PC-1 { // You might need something like this line instead so that it doesn't error out if you are only planning to make a scaled down number of synapses
      // only connection if physical connection exists
      if (rc.x[j] <= cp) {
        //print "   src ", j
        src = cells.object(j+iCA3).stim
        // set up connection from source to target NMDA synapse
//        nc = pc.gid_connect(j+iCA3, synN)
        nc = new NetCon(src, synN)
        ncslist.append(nc)
        nc.delay = CDEL
        nc.weight = CNWGT	// NMDA weight same for all connections
        // high AMPA if weight is 1
        if (conns.x[j] == 1) {
          // set up connection from source to target
          //nc = pc.gid_connect(j+iCA3, syn)
          nc = new NetCon(src, syn)
          ncslist.append(nc)
          nc.delay = CDEL
          nc.weight = CHWGT
        } else {
          // set up connection from source to target
          //nc = pc.gid_connect(j+iCA3, syn)
          nc = new NetCon(src, syn)
          ncslist.append(nc)
          nc.delay = CDEL
          nc.weight = CLWGT	// unlearned weight
        }
      }
    }
    }
  }
}


mknet(FCONN, C_P)  // go ahead and create the net!



//////////////////////////////////////////////////
// Instrumentation, i.e. stimulation and recording
//////////////////////////////////////////////////

// setup activity in EC stims
proc mkEC() {local i, necs localobj cstim, rs
  EClist = new Vector()
  necs = 0
  print "Make EC input..."
  for i=0, cells.count-1 {
    gid = gidvec.x[i]	// id of cell
    if (gid >= iEC && gid < iEC+nEC) {	// appropriate target cell
        // create cue stimulus
        cstim = cells.object(i).stim
    	rs = ranlist.object(i)
        cstim.number = ECNUM
        cstim.start = ECSTART
        cstim.interval = ECINT
        cstim.noise = ECNOISE
        // Use the gid-specific random generator so random streams are
        // independent of where and how many stims there are.
        cstim.noiseFromRandom(rs.r)
        rs.r.normal(0, 1)
        rs.start()
        EClist.append(i)
        necs += 1
    }
  }
}


objref cue, fp

// setup activity pattern in input cue stims
proc mkcue() {local i, j, ncue localobj cstim, target, rs
  print "Make cue (CA3) input..."
  cuelist = new Vector()
  // open patterns file
  fp = new File($s1)
  fp.ropen()
  cue = new Vector(nCA3)
  cue.scanf(fp, $2, $4)	// read pattern
//  cue.printf()
  fp.close()
  ncue = 0
  // find active cells in pattern
  for i=0, cue.size()-1 {
    //if (!pc.gid_exists(i+iCA3)) { continue }
    if (ncue <= SPATT*$3) { 	// fraction of active cells in cue
      if (cue.x[i] == 1) {
        print "Cue cell ", i
        //cstim = pc.gid2cell(i+iCA3)
        cstim = cells.object(i+iCA3).stim
        for j=0, cells.count-1 {
          if (gidvec.x[j] == i+iCA3) {break}	// find cell index
        }
    	rs = ranlist.object(j)
        // create cue stimulus
        cstim.number = CNUM
        cstim.start = CSTART
        cstim.interval = CINT
        cstim.noise = CNOISE
        // Use the gid-specific random generator so random streams are
        // independent of where and how many stims there are.
        cstim.noiseFromRandom(rs.r)
        rs.r.normal(0, 1)
        rs.start()
        cuelist.append(i)
        ncue += 1
      }
    }
  }
  print "  cue size ", ncue
}

// remove activity pattern in input cue stims
proc erasecue() {local i, j localobj cstim
  for i=0, cuelist.size()-1 {
    //if (!pc.gid_exists(i+iCA3)) { continue }
    //cstim = pc.gid2cell(i+iCA3)
    cstim = cells.object(cuelist.x[i]+iCA3).stim
    cstim.number = 0
  }
}


mkcue(FPATT, CPATT, CFRAC, NPATT)	// cue from already stored pattern
//mkcue(FSTORE, CPATT, CFRAC, NSTORE)	// cue from new pattern
mkEC()



// Spike recording
objref tvec, idvec  // will be Vectors that record all spike times (tvec)
        // and the corresponding id numbers of the cells that spiked (idvec)
proc spikerecord() {local i  localobj nc, nil
  print "Record spikes..."
  tvec = new Vector()
  idvec = new Vector()
  for i=0, cells.count-1 {
    nc = cells.object(i).connect2target(nil)
    nc.record(tvec, idvec, i)
    // the Vector will continue to record spike times
    // even after the NetCon has been destroyed
  }
}

spikerecord()


// Record cell voltage traces
objref pvsoma, pvsr, pvslm  // Vectors that record voltages from pattern PC
objref npvsoma, npvsr, npvslm  // Vectors that record voltages from non-pattern PC
objref vBC, vAAC, vBSC, vOLM  // Vectors that record voltages from INs

proc vrecord() {local i, gid 
  print "Record example voltage traces..."
  for i=0, cells.count-1 {	// loop over possible target cells
    gid = gidvec.x[i]	// id of cell
    if (gid==iPPC) {
      pvsoma = new Vector()
      pvsr = new Vector()
      pvslm = new Vector()
      pvsoma.record(&cells.object(i).soma.v(0.5))
      pvsr.record(&cells.object(i).radTmed.v(0.5))
      pvslm.record(&cells.object(i).lm_thick1.v(0.5))
    }
    if (gid==iNPPC) {
      npvsoma = new Vector()
      npvsr = new Vector()
      npvslm = new Vector()
      npvsoma.record(&cells.object(i).soma.v(0.5))
      npvsr.record(&cells.object(i).radTmed.v(0.5))
      npvslm.record(&cells.object(i).lm_thick1.v(0.5))
    }
    if (gid==iBC) {
      vBC = new Vector()
      vBC.record(&cells.object(i).soma.v(0.5))
    }
    if (gid==iAAC) {
      vAAC = new Vector()
      vAAC.record(&cells.object(i).soma.v(0.5))
    }
    if (gid==iBSC) {
      vBSC = new Vector()
      vBSC.record(&cells.object(i).soma.v(0.5))
    }
    if (gid==iOLM) {
      vOLM = new Vector()
      vOLM.record(&cells.object(i).soma.v(0.5))
    }
  }
}

vrecord()


////////////////////////////
// Simulation control
////////////////////////////

strdef fstem
fstem = "Results/HAM_P5R1"

tstop = SIMDUR
celsius = 34


//run()


////////////////////////////
// Report simulation results
////////////////////////////

objref fo
strdef fno

proc spikeout() { local i  
  printf("\ntime\t cell\n")  // print header once
  sprint(fno,"%s_spt.dat", fstem)
  fo = new File(fno)
  fo.wopen()
  for i=0, tvec.size-1 {
    printf("%g\t %d\n", tvec.x[i], idvec.x[i])
    fo.printf("%g\t %d\n", tvec.x[i], idvec.x[i])
  }
  fo.close()
}


proc vout() { local i, j, gid
  
  for j=0, cells.count-1 {	// loop over possible target cells
    gid = gidvec.x[j]	// id of cell
    if (gid==iPPC) {
      sprint(fno,"%s_pvsoma.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, pvsoma.size-1 {
        fo.printf("%g\n", pvsoma.x[i])
      }
      fo.close()
      sprint(fno,"%s_pvsr.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, pvsr.size-1 {
        fo.printf("%g\n", pvsr.x[i])
      }
      fo.close()
      sprint(fno,"%s_pvslm.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, pvslm.size-1 {
        fo.printf("%g\n", pvslm.x[i])
      }
      fo.close()
    }
    if (gid==iNPPC) {
      sprint(fno,"%s_npvsoma.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, npvsoma.size-1 {
        fo.printf("%g\n", npvsoma.x[i])
      }
      fo.close()
      sprint(fno,"%s_npvsr.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, npvsr.size-1 {
        fo.printf("%g\n", npvsr.x[i])
      }
      fo.close()
      sprint(fno,"%s_npvslm.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, npvslm.size-1 {
        fo.printf("%g\n", npvslm.x[i])
      }
      fo.close()
    }
    if (gid==iBC) {
      sprint(fno,"%s_BC.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, vBC.size-1 {
        fo.printf("%g\n", vBC.x[i])
      }
      fo.close()
    }
    if (gid==iAAC) {
      sprint(fno,"%s_AAC.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, vAAC.size-1 {
        fo.printf("%g\n", vAAC.x[i])
      }
      fo.close()
    }
    if (gid==iBSC) {
      sprint(fno,"%s_BSC.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, vBSC.size-1 {
        fo.printf("%g\n", vBSC.x[i])
      }
      fo.close()
    }
    if (gid==iOLM) {
      sprint(fno,"%s_OLM.dat", fstem)
      fo = new File(fno)
      fo.wopen()
      for i=0, vOLM.size-1 {
        fo.printf("%g\n", vOLM.x[i])
      }
      fo.close()
    }
  }
}



// produce raster plot of spiking activity
objref gs
proc spikeplot() { local i
  gs = new Graph()
  gs.size(0, tstop, -1, ntot)
  for i=0, tvec.size-1 {
    gs.mark(tvec.x[i], idvec.x[i], "|", 8)
  }
  gs.flush()
}

// panel for simulation results
proc xspikeres() {
  xpanel("Spike results")
  xbutton("Write out", "spikeout()")
  xbutton("Plot", "spikeplot()")
  xpanel()
}

StepBy=100 // ms
objref fihw
fihw = new FInitializeHandler(2, "midbal()")
walltime = startsw()
proc midbal() {local wt, thisstep
	wt = startsw()	// Get current time
	if (t>0) {
		thisstep = wt - walltime	// Calculate the real time taken by the most
		{ printf("%g ms interval at t=%g ms was %g s\n", StepBy, t, thisstep) }
	}
	
	walltime = wt
	cvode.event(t+StepBy, "midbal()")
}

if (batchflag==1) {
	print "Now running simulation at scale = ", scaleDown, " for time = ", SIMDUR, " with scaleEScon = ", scaleEScon
	run()
	spikeout()
	if (plotflag==1) {
		spikeplot()
	}
	vout()
	print "** Finished running sim and printing results **"
} else {
	// panel for simulation results
	xopen("HAM_SR.ses")
	xspikeres()
}